<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>ResponseServer</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>5006</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>CommandServer</osc:Name>
          <osc:Port>5005</osc:Port>
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/grid</osc:Address>
        <osc:TypeTag>ii</osc:TypeTag>
        <osc:Connection>CommandServer</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>CreateGrid</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>GridParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GridParameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item1" />
                <Property Name="Height" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PointGrid">
                <p1:Width>8</p1:Width>
                <p1:Height>8</p1:Height>
                <p1:ExtentX>1.5</p1:ExtentX>
                <p1:ExtentY>1.5</p1:ExtentY>
                <p1:LocationX>0</p1:LocationX>
                <p1:LocationY>0</p1:LocationY>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Max" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>GridDot</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>DotParameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DotParameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Highlight</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Max" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FeedbackParameters</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Feedback</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DotParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Value" Selector="Item2" />
                          </PropertyMappings>
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>15</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Max" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Rescale">
                            <dsp:Min>0</dsp:Min>
                            <dsp:Max>5000</dsp:Max>
                            <dsp:RangeMin>0</dsp:RangeMin>
                            <dsp:RangeMax>1</dsp:RangeMax>
                            <dsp:RescaleType>Linear</dsp:RescaleType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1 as ViewMatrix,
Item2 as Parameters,
Item3 as Feedback,
Item2.Index == Item4 ? 0.2 : 0.1 as Highlight)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="Parameters.Value.X" />
                      <Property Name="LocationY" Selector="Parameters.Value.Y" />
                      <Property Name="Diameter" Selector="Highlight" />
                      <Property Name="ColorG" Selector="Feedback" />
                      <Property Name="ColorB" Selector="Feedback" />
                    </PropertyMappings>
                    <Selector>ViewMatrix</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>-0.107142866</LocationX>
                    <LocationY>-0.535714269</LocationY>
                    <Layer>0</Layer>
                    <Diameter>0.1</Diameter>
                    <ColorR>1</ColorR>
                    <ColorG>6.82463E-05</ColorG>
                    <ColorB>6.82463E-05</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="2" To="8" Label="Source2" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="4" To="7" Label="Source4" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trials</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>NaN</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Highlight</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/select</osc:Address>
              <osc:TypeTag>i</osc:TypeTag>
              <osc:Connection>CommandServer</osc:Connection>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>RunTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>Channel</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Highlight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Signal</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>100</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>NaN</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Highlight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Channel</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>ResponseServer</osc:Connection>
              <osc:Address>/end</osc:Address>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>Data\calibration.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ScalarBuffer">
                <dsp:Size>
                  <dsp:Width>1</dsp:Width>
                  <dsp:Height>1</dsp:Height>
                </dsp:Size>
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Channels>1</dsp:Channels>
                <dsp:Value>
                  <dsp:Val0>0</dsp:Val0>
                  <dsp:Val1>0</dsp:Val1>
                  <dsp:Val2>0</dsp:Val2>
                  <dsp:Val3>0</dsp:Val3>
                </dsp:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/end</osc:Address>
              <osc:TypeTag />
              <osc:Connection>CommandServer</osc:Connection>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>Data\calibration.bin</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Feedback</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EmgAcquisition">
                <p1:BufferSize>10</p1:BufferSize>
                <p1:NumChannels>8</p1:NumChannels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Scale>0.0002861</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Signal</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Reduce">
                <dsp:Axis>1</dsp:Axis>
                <dsp:Operation>Avg</dsp:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="dsp:ConvertToArray">
              <dsp:Depth>F32</dsp:Depth>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Feedback</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>